<?xml version="1.0" encoding="utf-8"?>
<Parameters FOVx="192" FOVy="192" FOVz="126" GradMaxAmpl="12" GradSlewRate="53.5" Name="P"
            Nx="64"
            Ny="64"
            Nz="42"
            TE="4"
            TI="1.1"
            TR="40">
   <ConcatSequence Name="R">
      <CONCATSEQUENCE Name="C3" Repetitions="10">
         <ATOMICSEQUENCE Name="A11">
            <HARDRFPULSE Duration="a1" FlipAngle="a2" Name="P11" Observe="P10,Duration/P10,FlipAngle"
                         Symmetry="0.5"/>
         </ATOMICSEQUENCE>
         <DELAYATOMICSEQUENCE Delay="a1" DelayType="B2E" Name="D3" Observe="P,TR" StartSeq="A11"/>
      </CONCATSEQUENCE>
      <CONCATSEQUENCE Name="C4" Observe="P,Nz" Repetitions="a1">
         <ConcatSequence Name="C" Observe="P,Ny" Repetitions="a1">
            <ATOMICSEQUENCE Name="A1">
               <HARDRFPULSE Duration="0.1" FlipAngle="15" InitialPhase="0.5*117*((C^2)+C+2)" Name="P10"
                            Observe="C=C.Counter"
                            Symmetry="0.5"/>
            </ATOMICSEQUENCE>
            <DELAYATOMICSEQUENCE Delay="a1" DelayType="C2C" Name="D1" Observe="P,TE" StartSeq="A1" StopSeq="A6"/>
            <ATOMICSEQUENCE Name="A60">
               <TRAPGRADPULSE Area="a1/2" Axis="GX" Name="P50" Observe="P6,Area"/>
            </ATOMICSEQUENCE>
            <ATOMICSEQUENCE Name="A4">
               <TRAPGRADPULSE Area="-a1" Axis="GX" Name="P5" Observe="P6,Area"/>
               <TRAPGRADPULSE Area="a1-a2*a3*(1+1/(a4-1))" Axis="GY" Name="P3"
                              Observe="P,KMAXy/C,Counter/P,DKy/P,Ny"/>
               <TRAPGRADPULSE Area="a1-a2*a3*(1+1/(a4-1))" Axis="GZ" Name="P30"
                              Observe="P,KMAXz/C4,Counter/P,DKz/P,Nz"/>
            </ATOMICSEQUENCE>
            <ATOMICSEQUENCE Name="A6">
               <TRAPGRADPULSE ADCs="a2" Axis="GX" FlatTopArea="2*a1" FlatTopTime="a3" Name="P6"
                              Observe="P,KMAXx/P,Nx/P,TI"/>
            </ATOMICSEQUENCE>
            <ATOMICSEQUENCE Name="A10">
               <TRAPGRADPULSE Area="2*a1" Axis="GX" Name="P88" Observe="P6,FlatTopArea"/>
            </ATOMICSEQUENCE>
            <DELAYATOMICSEQUENCE Delay="a1" DelayType="B2E" Name="D2" Observe="P,TR" StartSeq="A1"/>
         </ConcatSequence>
      </CONCATSEQUENCE>
   </ConcatSequence>
</Parameters>