<?xml version="1.0" encoding="utf-8"?>
<Parameters FOVx="128" FOVy="128" FOVz="1" Name="P" Nx="128" Ny="128" Nz="1" TE="32"
            TR="200">
   <ConcatSequence Name="R">
      <ConcatSequence Name="C1">
         <ATOMICSEQUENCE Name="A5">
            <HARDRFPULSE Duration="10" FlipAngle="180" Name="P7" Symmetry="0.5"/>
         </ATOMICSEQUENCE>
      </ConcatSequence>
      <ConcatSequence LoopFlag="0" Name="C2" Repetitions="2" Vector="0">
         <CONCATSEQUENCE LoopFlag="2" Name="C" Observe="NY=P.Ny" Repetitions="NY">
            <ATOMICSEQUENCE Name="A1">
               <HARDRFPULSE Duration="0.1" FlipAngle="20" InitialPhase="C*(C+1)*50" Name="P1"
                            Observe="C=C.Counter"/>
            </ATOMICSEQUENCE>
            <DELAYATOMICSEQUENCE Delay="TE" DelayType="C2C" Name="D3" Observe="TE=P.TE" StartSeq="A1"
                                 StopSeq="A3"/>
            <ATOMICSEQUENCE Name="A2">
               <TRAPGRADPULSE Area="-A/2" Axis="GX" Name="P2" Observe="A=P4.Area"/>
               <TRAPGRADPULSE Area="-KMY+C*DKY" Axis="GY" Name="P3"
                              Observe="KMY=P.KMAXy, C=C.Counter, DKY=P.DKy"/>
            </ATOMICSEQUENCE>
            <ATOMICSEQUENCE Name="A3">
               <TRAPGRADPULSE ADCFlag="2" ADCs="NX" Axis="GX" FlatTopArea="2*KMX" FlatTopTime="16" Name="P4"
                              Observe="KMX=P.KMAXx, NX=P.Nx"
                              PhaseLock="1"/>
            </ATOMICSEQUENCE>
            <ATOMICSEQUENCE Name="A4">
               <TRAPGRADPULSE Area="2*A" Axis="GX" Name="P5" Observe="A=P4.Area"/>
               <TRAPGRADPULSE Area="-(A*0.5)" Axis="GY" Name="P6" Observe="A=P3.Area"/>
            </ATOMICSEQUENCE>
            <DELAYATOMICSEQUENCE Delay="TR" DelayType="B2E" Name="D4" Observe="TR=P.TR" StartSeq="A1"/>
         </CONCATSEQUENCE>
      </ConcatSequence>
   </ConcatSequence>
</Parameters>